begin model

begin parameters
  kon 10
  koff 5
  kcat 0.7
  dephos 0.5
end parameters

begin compartments
  b 3 100
  a 2 10 b
end compartments

begin molecule types
  X(y,p~0~1)
  Y(x)
end molecule types

begin species
  @b:X(p~0,y) 5000
  @b:X(p~1,y) 0
  @b:Y(x) 500
end species

begin observables
  Molecules X_free X(p~0,y)
  Molecules X_p_total X(p~1)
  Molecules Xp_free X(p~1,y)
  Molecules XY X(y!1).Y(x!1)
  Molecules Ytotal Y()
  Molecules Xtotal X()
end observables

begin functions
  f() = 10*20
end functions

begin reaction rules
  _R1: X(y,p~0) + Y(x) -> X(y!1,p~0).Y(x!1) kon 
  _R2: X(y!1,p~0).Y(x!1) -> X(y,p~0) + Y(x) koff 
  _R3: X(y!1,p~0).Y(x!1) -> X(y,p~1) + Y(x) kcat 
  _R4: X(p~1) -> X(p~0) dephos 
end reaction rules

end model

visualize({type=>'contactmap'})
visualize({type=>'ruleviz_pattern'})
visualize({type=>'ruleviz_operation'})
visualize({type=>'regulatory',background=>1,ruleNames=>1})